PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new2
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Routines
  Routine Welcome
    TextComponent welcome_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = توضیحات و سلام
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    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent thanks_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = دست شما درد نکنه
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  Routine code_positions
    CodeComponent positions
      Code Type = Py
      Begin Experiment:
        # set_positions()
        # Positions used during the experiment
        # Position variables end with _p.
        def set_positions():
          global share_p # position of the share icon.
          global like_p # position of the like icon.
          global dislike_p # position of the dislike icon.
          global next_p # position of the next icon.
          global text_p #position of the text news
          global rate_p #position of the rating scale
          global rate_text_p #position of the rating description

          delta_x, delta_y = win.size/4
          quarter_centers = [ [-delta_x, +delta_y], [+delta_x, +delta_y], [+delta_x, -delta_y], [-delta_x, -delta_y] ]
            #centers when window is quartered.
          half_centers = [ [0 , +delta_y], [0, -delta_y] ] #centers when window is halved.

          #rate_dist = win.size[1]/50
          #rate_centers = np.array([0, rate_dist])
          text_p = half_centers[0]
          rate_p = half_centers[1]
          rate_text_p = (0 , -0.1)

          icon_dist = win.size[0]/9
          icon_centers = np.array([icon_dist, 0])
          dislike_p = np.array( quarter_centers[3] ) + icon_centers
          next_p = np.array( quarter_centers[2]) + icon_centers
          like_p = np.array( quarter_centers[3]) - icon_centers
          share_p = np.array( quarter_centers[2]) - icon_centers

        # set_sizes()
        # Sizes used during the experiment
        # Size variables end with _s.
        def set_sizes():
            global image_frame_s #size of the image frame
            global image_s #size of the image stimuli
            global text_frame_s #size of the text frame
            global text_s #size of the image statements
            global icon_s #size of the icons

            screen_size = np.array( win.size )
            image_frame_s = (np.array( [ win.size[0]/2, win.size[1]/2 ] ))* 0.95
            image_s = (image_frame_s) * 0.95
            text_frame_s = np.array( [ win.size[0], win.size[1]/2 ] ) * 0.95
            text_s = (text_frame_s)
            icon_s = np.array( [ win.size[0]/8, win.size[1]/4 ] )
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        set_positions()
        set_sizes()
  Routine description1
    TextComponent description_next_phase
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = توضیحات
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    KeyboardComponent resp_next_phase
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine statement_selection_code
    CodeComponent statement_selection
      Code Type = Py
      Begin Experiment:
        import random
        block_num = 3
        statement_per_block = 4
        #sample_num = int((block_num*statement_per_block)/2)
        request_num = int(statement_per_block/2)

        news = pd.read_csv("news-statements.csv")

        news["displayed_yet"] = 0
        not_displayed_news = news.loc[news["displayed_yet"]== 0] #creating a new dataframe
        overall_selected_statements = {}
        #np.zeros((block_num , statement_per_block), dtype = str)
        for i in range(block_num):
            not_displayed_news = news.loc[news["displayed_yet"]== 0]
            selected_statements = not_displayed_news.groupby("Accuracy").sample(n= request_num)
            selected_ids = selected_statements.index
            news.at[selected_ids,"displayed_yet"] = 1
            print(news)
            #selected_statements_array = np.array(selected_statements["Statements"])
            #selected_statements_array = np.random.permutation(selected_statements_array)
            #overall_selected_statements[i] = selected_statements_array
            selected_statements_list = list(selected_ids)
            random.shuffle(selected_statements_list)
            print(selected_statements_list)
            overall_selected_statements[i] = selected_statements_list
  Routine prime_valence
    CodeComponent choosing_blocks
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        from numpy.random import choice

        pic_choice = choice(5, size=3, replace=False)

        image_blocks = ['NegBlock.csv', 'NeuBlock.csv', 'PosBlock.csv']
        np.random.shuffle(image_blocks) # randomise order
      Begin Routine:
        #if conditionSelectLoop.thisN == 0:
        #    shuffle(image_blocks)
    PolygonComponent stim_frame_valence
      fillColor = black
      lineColor = black
      pos = text_p
      shape = rectangle
      size = image_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent stim_image_valence
      image [set every repeat] = $stimFile
      pos = text_p
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent valence_rating
      forceEndRoutine = True
      high = +4
      low = -4
      pos = rate_p
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.04
      pos = rate_text_p
      startVal [time (s)] = 0.0
      text = احساس شما نسبت به این تصویر چگونه است؟
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  Routine blank_valence
    PolygonComponent blank_frame
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1366, 768)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
      units = pix
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  Routine statement_interaction
    PolygonComponent text_frame
      fillColor = gray
      lineColor = black
      lineWidth = 10
      pos = text_p
      shape = rectangle
      size = text_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_image
      image [set every repeat] = $Statements
      pos = text_p
      size = text_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent next_image
      image = noun_swipe.png
      pos = next_p
      size = icon_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share_image
      image = noun_share.png
      pos = share_p
      size = icon_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like_image
      image = noun_like.png
      pos = like_p
      size = icon_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike_image
      image = noun_Dislike.png
      pos = dislike_p
      size = icon_s
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent response
      clickable = like_image,share_image,dislike_image,next_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine rest_question
    CodeComponent choosing_Q
      Code Type = Py
    CodeComponent questionair
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        question_text.alignHoriz ='left'
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return' and len(inputText) > 1:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif theseKeys[i] == 'period':
                inputText = inputText + "."
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent question_text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.1
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      text [set every frame] = $(word + '\n' + inputText)
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    KeyboardComponent answers
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine prime_arousal
    CodeComponent chossing_pics2
      Code Type = Py
      Begin Experiment:
        image_blocks = ['NegBlock.csv', 'NeuBlock.csv', 'PosBlock.csv']
        np.random.shuffle(image_blocks) # randomise order
    PolygonComponent stim_frame_arousal
      fillColor = black
      lineColor = black
      pos = text_p
      shape = rectangle
      size = image_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent stim_image_arousal
      image [set every repeat] = $stimFile
      pos = text_p
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent arousal_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = rate_p
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message2
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.04
      pos = rate_text_p
      startVal [time (s)] = 0.0
      text = انگیختگی شما نسبت به این تصویر چگونه است؟
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  Routine blank_arousal
    PolygonComponent blank_frame2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1366, 768)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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  Routine statement_accuracy
    PolygonComponent text_frame2
      fillColor = gray
      lineColor = black
      lineWidth = 5
      opacity = 10
      pos = text_p
      shape = rectangle
      size = text_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_image2
      image [set every repeat] = $Statements
      pos = text_p
      size = text_s
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent validity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = rate_p
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent scale_message3
      font = Nazli
      languageStyle = Arabic
      letterHeight = 0.04
      pos = rate_text_p
      startVal [time (s)] = 0.0
      text = تا چه میزان از صحت و اعتبار این متن اطمینان دارید؟
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Flow
  Routine code_positions
  Routine Welcome
  LoopInitiator conditionSelectLoop loopType="TrialHandler"
    conditionsFile = chooseBlocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.csv'), ('QuestionFiles', 'Q-1.csv')]),
      OrderedDict([('condsFile', 'NeuBlock.csv'), ('QuestionFiles', 'Q-2.csv')]),
      OrderedDict([('condsFile', 'PosBlock.csv'), ('QuestionFiles', 'Q-3.csv')])]
    LoopInitiator blocks loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $pic_choice 
        conditionsFile = $thisConditionSelectLoop['condsFile']
        loopType = random
        nReps = 1
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        Routine prime_valence
        Routine blank_valence
      LoopTerminator trials
      LoopInitiator trials_2 loopType="TrialHandler"
        Selected rows = $overall_selected_statements[conditionSelectLoop.thisN][(blocks.thisN *( statement_per_block)): ((blocks.thisN + 1) * ( statement_per_block))]
        conditionsFile = news-statements.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Statements', 'News/F-1.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-2.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-3.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-4.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-5.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-6.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-7.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-8.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/T-1.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-2.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-3.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-4.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-5.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-6.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-7.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-8.png'), ('Accuracy', 1)])]
        Routine statement_selection_code
        Routine statement_interaction
      LoopTerminator trials_2
      LoopInitiator trials_3 loopType="TrialHandler"
        Selected rows = 0:3
        conditionsFile = $QuestionFiles
        loopType = sequential
        nReps = 1
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        Routine rest_question
      LoopTerminator trials_3
    LoopTerminator blocks
  LoopTerminator conditionSelectLoop
  Routine description1
  LoopInitiator conditionSelectLoop_2 loopType="TrialHandler"
    conditionsFile = chooseBlocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.csv'), ('QuestionFiles', 'Q-1.csv')]),
      OrderedDict([('condsFile', 'NeuBlock.csv'), ('QuestionFiles', 'Q-2.csv')]),
      OrderedDict([('condsFile', 'PosBlock.csv'), ('QuestionFiles', 'Q-3.csv')])]
    LoopInitiator blocks_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      LoopInitiator trials_4 loopType="TrialHandler"
        Selected rows = $pic_choice
        conditionsFile = $thisConditionSelectLoop_2['condsFile']
        loopType = random
        nReps = 1
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        Routine prime_arousal
        Routine blank_arousal
      LoopTerminator trials_4
      LoopInitiator trials_5 loopType="TrialHandler"
        Selected rows = $overall_selected_statements[conditionSelectLoop_2.thisN][(blocks_2.thisN *( statement_per_block)): ((blocks_2.thisN + 1) * ( statement_per_block))]
        conditionsFile = news-statements.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Statements', 'News/F-1.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-2.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-3.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-4.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-5.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-6.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-7.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-8.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/T-1.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-2.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-3.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-4.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-5.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-6.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-7.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-8.png'), ('Accuracy', 1)])]
        Routine statement_accuracy
      LoopTerminator trials_5
    LoopTerminator blocks_2
  LoopTerminator conditionSelectLoop_2
  Routine Thanks
